PsychoPy2experiment version="2023.1.1"
Settings
  Data filename = 'data/%s/%s-%s' %(expInfo['Participant_ID'], expInfo['Participant_ID'], expInfo['date']) 
  Experiment info = {'Participant_ID': 'P00'}
  Full-screen window = True
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = TCET
  keyboardBackend = PsychToolbox
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Routines
  Routine InterSessInstr
    PolygonComponent ISIBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent InterSessInstrct
      image = ExtinctionInstruction.PNG
      size = [1.8, 1.8]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndBlock
    PolygonComponent Bkg_Light
      fillColor = 0.8824, 0.6392, 0.4432
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent EndTxtEN
      color = black
      font = Helvetica
      letterHeight = 0.2
      startEstim = 0
      startVal [condition] = $isChinese==False
      stopVal [duration (s)] = 5
      text [set every repeat] = $EndTextEN
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    TextComponent EndTxtCN
      color = black
      font = PingFang SC
      letterHeight = 0.2
      pos = [-0.1, 0]
      startEstim = 0
      startVal [condition] = $isChinese==True
      stopVal [duration (s)] = 5
      text [set every repeat] = $EndTextCN
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  Routine BlockStart
    CodeComponent BlckInitCode
      Code Type = Auto->JS
  Routine Response
    TextComponent RespInstru
      letterHeight = 0.08
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      wrapWidth = 1
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      text:
        Please Rate the Emotional Valence of the figure just presented
        Very negative = 0;            Very positive = 7
    RatingScaleComponent RespRate
      categoryChoices = 0 1 2 3 4 5 6 7
      forceEndRoutine = True
      high = 7
      low = 0
      pos = 0, -0.4
      scaleDescription = ''Very negative = 0; Very positive = 7''
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine ITIRand
    TextComponent ITIFixation
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine trialPreCond
    PolygonComponent precondBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    ImageComponent imagePreCond
      image [set every repeat] = $PreCondName
      size = [2, 2]
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
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    CodeComponent EachTrial
      Code Type = Auto->JS
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      Begin Routine:
        if skipPhases == True:
            continueRoutine = False #end the routine
            PreCond.finished = True #break the loop

        if parallelTrigger == True:
           ParaleData = 50  #Faissal
           #ParaleData = int((TrgCol+0.6)*40+20) #Faissal
           port.setData(ParaleData) #Faissal
           if lfpTrigger == True:
                lfpCtrlPort.setData(1)
           core.wait(0.02)
           port.setData(0) #Faissal
           if lfpTrigger == True:
                lfpCtrlPort.setData(0)
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [condition] = $PreCondName=="Stimuli/Trig.BMP"
      stopVal [time (s)] = 6
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine trialCond
    PolygonComponent CSBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    ImageComponent CS_image
      image [set every repeat] = $CSName
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent EachTrial_2
      Code Type = Auto->JS
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      Begin Routine:
        if skipPhases == True:
            continueRoutine = False #end the routine
            Cond.finished = True #break the loop

        if parallelTrigger == True:
           ParaleData = 50  #Faissal
           #ParaleData = int((TrgCol+0.6)*40+20) #Faissal
           port.setData(ParaleData) #Faissal
           if lfpTrigger == True:
                lfpCtrlPort.setData(1)
           core.wait(0.02)
           port.setData(0) #Faissal
           if lfpTrigger == True:
                lfpCtrlPort.setData(0)
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [condition] = $PreCondName=="Stimuli/Trig.BMP"
      stopVal [time (s)] = 6
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine UCS
    PolygonComponent UCSBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent UCS_image
      image [set every repeat] = $UCSName
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_1
      sound [set every repeat] = $SoundName
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      volume = 0.3
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  Routine trialExt
    PolygonComponent ExtBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    ImageComponent Ext_image
      image [set every repeat] = $ExtName
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent EachTrial_3
      Code Type = Auto->JS
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      Begin Routine:
        if skipPhases == True:
            continueRoutine = False #end the routine
            Ext.finished = True #break the loop

        if parallelTrigger == True:
           ParaleData = 50  #Faissal
           #ParaleData = int((TrgCol+0.6)*40+20) #Faissal
           port.setData(ParaleData) #Faissal
           if lfpTrigger == True:
                lfpCtrlPort.setData(1)
           core.wait(0.02)
           port.setData(0) #Faissal
           if lfpTrigger == True:
                lfpCtrlPort.setData(0)
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [condition] = $PreCondName=="Stimuli/Trig.BMP"
      stopVal [time (s)] = 6
      syncScreenRefresh = True
      timeRelativeTo = routine
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  Routine ITIradom2
    PolygonComponent BlankBkg2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = random.uniform(0, 2)+6
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  Routine PreCondRating2
    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine PreCondInst
    PolygonComponent InstrBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent PreCondImage
      image [set every repeat] = $PreCondInstTextImage
      pos = [0,0.05]
      size = [0.45,0.9]
      startVal [time (s)] = 0.0
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    TextComponent PreCondInstEN
      font = Helvetica
      letterHeight = 0.1
      pos = [0,0.7]
      startVal [condition] = $isChinese==False
      text [set every repeat] = $PreCondInstTextEN
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    TextComponent PreCondInstCN
      font = PingFang SC
      letterHeight = 0.1
      pos = (-0.2,0.7)
      startVal [condition] = $isChinese==True
      text [set every repeat] = $PreCondInstTextCN
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    KeyboardComponent InstrKeyResp
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent PreCondMouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ButtonComponent PreCondSubmit
      bold = True
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      font = Helvetica
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [time (s)] = 0
      text = CONTINUE
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  Routine CondInst
    PolygonComponent InstrBkg2
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent CondImage
      image [set every repeat] = $CondInstTextImage
      pos = [0,0.05]
      size = [0.45,0.9]
      startVal [time (s)] = 0.0
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    TextComponent CondInstEN
      font = Helvetica
      letterHeight = 0.1
      pos = [0,0.7]
      startVal [condition] = $isChinese==False
      text [set every repeat] = $CondInstTextEN
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    TextComponent CondInstCN
      font = PingFang SC
      letterHeight = 0.1
      pos = [-0.2,0.7]
      startVal [condition] = $isChinese==True
      text [set every repeat] = $CondInstTextCN
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent CondMouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ButtonComponent CondSubmit
      bold = True
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      font = Helvetica
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [time (s)] = 0
      text = CONTINUE
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  Routine ITI
    PolygonComponent BlankBkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = random.uniform(0, 2)+6
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    PolygonComponent FixCross
      fillColor = white
      lineColor = black
      saveStartStop = False
      shape = cross
      size = (0.05, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random.uniform(0, 2)+6
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  Routine ExtSessStart
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        iSet2 = SetNums2[Sess2]
        ExtinctionFN = 'Extinction'+str(iSet2)+'.xlsx'
        RatingFN = 'Rating'+str(iSet2)+'.xlsx'
        Sess2 = Sess2 + 1
  Routine CondSessStart
    CodeComponent SessInitCode
      Code Type = Auto->JS
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      Begin Routine:
        iSet = SetNums[Sess]
        # Set Condition files here
        PreConditionFN = 'PreCondition'+str(iSet)+'.xlsx'
        #The ConditionFN sheet includes 30 conditions, of whih 24 (80%) include UCS
        ConditionFN = 'Condition'+str(iSet)+'.xlsx'
        RatingFN = 'Rating'+str(iSet)+'.xlsx'
        Sess = Sess + 1
  Routine Rating
    PolygonComponent Bkg
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $CondName
      pos = [0,0.1]
      size = [0.45,0.9]
      startVal [time (s)] = 0.0
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    TextComponent RatingInstEN
      font = Helvetica
      letterHeight = 0.1
      pos = [0,0.7]
      startVal [condition] = $isChinese==False
      text [set every repeat] = $FearRatingInstTextEN
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    TextComponent RatingInstCN
      font = PingFang SC
      letterHeight = 0.1
      pos = [0,0.7]
      startVal [condition] = $isChinese==True
      text [set every repeat] = $FearRatingInstTextCN
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    SliderComponent Scale
      fillColor = beige
      font = Helvetiva
      forceEndRoutine = False
      granularity = 1
      labels = '– Negative', 'Positive +',
      letterHeight = 0.07
      pos = (0, -0.5)
      size = (1.2, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ButtonComponent Submit
      bold = True
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      font = Helvetica
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [condition] = Scale.rating
      text = SUBMIT
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  Routine ExtInst
    PolygonComponent InstrBkg3
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent ExtImage
      image [set every repeat] = $ExtInstTextImage
      pos = [0,0.05]
      size = [0.45,0.9]
      startVal [time (s)] = 0.0
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    TextComponent ExtInstEN
      font = Helvetica
      letterHeight = 0.1
      pos = [0,0.7]
      startVal [condition] = $isChinese==False
      text [set every repeat] = $ExtInstTextEN
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    TextComponent ExtInstCN
      font = PingFang SC
      letterHeight = 0.1
      pos = [-0.2,0.7]
      startVal [condition] = $isChinese==True
      text [set every repeat] = $ExtInstTextCN
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent ExtMouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ButtonComponent ExtSubmit
      bold = True
      color = black
      fillColor = 0.8824, 0.6392, 0.4432
      font = Helvetica
      forceEndRoutine = True
      letterHeight = 0.06
      pos = [0.7, -0.8]
      size = [0.3, 0.1]
      startVal [time (s)] = 0
      text = CONTINUE
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  Routine Init
    CodeComponent Properties
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        parallelTrigger = False

        isChinese = False #sets task lang to Chinese
        skipPhases = False #Shows only instructions and ratings

        if parallelTrigger == True:
            from psychopy import parallel
            port = parallel.ParallelPort(address=0x0378)
            port.setData(0)
            if lfpTrigger == True:
                lfpCtrlPort = parallel.ParallelPort(address=0x037A)
                lfpCtrlPort.setData(0)

        random.seed()
        SetNums = [1,2,3]
        Sess = 0
Flow
  Routine Init
  LoopInitiator PreCondInstText loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = 0_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'PreCondInstTextEN': 'Please sit comfortably and focus on the screen at all times.', 'PreCondInstTextCN': '请放松地坐在椅子上，并始终注视于屏幕。', 'PreCondInstTextImage': 'Stimuli/Raw_black.BMP', 'CondInstTextEN': 'End of phase. Take a short break until you are instructed to continue.', 'CondInstTextCN': '本阶段结束。请短暂休息一下，等待开启下一阶段的指令。', 'CondInstTextImage': 'Stimuli/Raw_black.BMP', 'ExtInstTextEN': 'End of phase. Take a short break until you are instructed to continue.', 'ExtInstTextCN': '本阶段结束。请短暂休息一下，等待开启下一阶段的指令。', 'ExtInstTextImage': 'Stimuli/Raw_black.BMP', 'EndTextEN': 'The task is over, thank you for your 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,
      {'PreCondInstTextEN': 'You will see different faces appear on the screen. Please carefully observe them.', 'PreCondInstTextCN': '你会看到屏幕上出现不同的面孔。请仔细观察它们。', 'PreCondInstTextImage': 'Stimuli/Raw_black.BMP', 'CondInstTextEN': 'Again, faces will appear on the screen, of which some may feel unpleasant. Plase continue to look at the screen.', 'CondInstTextCN': '同样，你会看到屏幕上出现不同的面孔。请仔细观察它们。', 'CondInstTextImage': 'Stimuli/Raw_black.BMP', 'ExtInstTextEN': 'Before we continue, feel free to take a break of 5-10 minutes.', 'ExtInstTextCN': '在我们继续之前，请放松地休息5-10分钟.', 'ExtInstTextImage': 'Stimuli/Raw_black.BMP'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,
      {'PreCondInstTextEN': 'When you see the face below, please left-click the mouse as fast as you can', 'PreCondInstTextCN': '当你看到下面的面孔时，请以最快的速度按下鼠标左键。', 'PreCondInstTextImage': 'Stimuli/Raw_Trig.BMP', 'CondInstTextEN': 'When you see the face below, please left-click the mouse as fast as you can', 'CondInstTextCN': '当你看到下面的面孔时，请以最快的速度按下鼠标左键。', 'CondInstTextImage': 'Stimuli/Raw_Trig.BMP', 'ExtInstTextEN': 'Again, you will see different faces appear on the screen. Please carefully observe them.', 'ExtInstTextCN': '同样，你会看到屏幕上出现不同的面孔。请仔细观察它们。', 'ExtInstTextImage': 'Stimuli/Raw_black.BMP', 'EndTextEN'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,
      {'PreCondInstTextEN': 'Once you are ready, press CONTINUE', 'PreCondInstTextCN': "一旦你准备好了，请按下'Continue'.", 'PreCondInstTextImage': 'Stimuli/Raw_black.BMP', 'CondInstTextEN': 'Once you are ready, press CONTINUE', 'CondInstTextCN': "一旦你准备好了，请按下'Continue'.", 'CondInstTextImage': 'Stimuli/Raw_black.BMP', 'ExtInstTextEN': 'When you see the face below, please left-click the mouse as fast as you can', 'ExtInstTextCN': '当你看到下面的面孔时，请以最快的速度按下鼠标左键。', 'ExtInstTextImage': 'Stimuli/Raw_Trig.BMP', 'EndTextEN': None, 'EndTextCN': None}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
    Routine PreCondInst
  LoopTerminator PreCondInstText
  LoopInitiator PreCond loopType="TrialHandler"
    conditionsFile = 1_PreCondition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'PreCondName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6}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
    Routine trialPreCond
    Routine ITI
  LoopTerminator PreCond
  LoopInitiator RatingPreCond loopType="TrialHandler"
    conditionsFile = 4_Rating.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'CondName': 'Stimuli/Raw_Neg.BMP', 'TrgCol': 0, 'FearRatingInstTextEN': 'How do you feel about this image?', 'FearRatingInstTextCN': "你对这个面孔有什么感觉?（'– '表示消极, '+'表示积极）"},
      {'CondName': 'Stimuli/Raw_Neu.BMP', 'TrgCol': 0.4, 'FearRatingInstTextEN': None, 'FearRatingInstTextCN': None},
      {'CondName': 'Stimuli/Raw_Pos.BMP', 'TrgCol': 0.6, 'FearRatingInstTextEN': None, 'FearRatingInstTextCN': None},
      {'CondName': 'Stimuli/Raw_Trig.BMP', 'TrgCol': 0.9, 'FearRatingInstTextEN': None, 'FearRatingInstTextCN': None}]
    Routine Rating
  LoopTerminator RatingPreCond
  LoopInitiator CondInstText loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = 0_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine CondInst
  LoopTerminator CondInstText
  LoopInitiator Cond loopType="TrialHandler"
    conditionsFile = 2_Condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg.BMP', 'SoundName': 'Sound/silent.wav', 'TrgCol': 0},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg.BMP', 'SoundName': 'Sound/silent.wav', 'TrgCol': 0},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg.BMP', 'SoundName': 'Sound/silent.wav', 'TrgCol': 0},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg.BMP', 'SoundName': 'Sound/silent.wav', 'TrgCol': 0},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg.BMP', 'SoundName': 'Sound/silent.wav', 'TrgCol': 0},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg.BMP', 'SoundName': 'Sound/silent.wav', 'TrgCol': 0},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2},
      {'CSName': 'Stimuli/Neg.BMP', 'UCSName': 'Stimuli/Neg_UCS.BMP', 'SoundName': 'Sound/scream1.wav', 'TrgCol': 0.2}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
    Routine trialCond
    Routine UCS
    Routine ITI
  LoopTerminator Cond
  LoopInitiator RatingCond loopType="TrialHandler"
    conditionsFile = 4_Rating.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'CondName': 'Stimuli/Raw_Neg.BMP', 'TrgCol': 0, 'FearRatingInstTextEN': 'How do you feel about this image?', 'FearRatingInstTextCN': "你对这个面孔有什么感觉?（'– '表示消极, '+'表示积极）"},
      {'CondName': 'Stimuli/Raw_Neu.BMP', 'TrgCol': 0.4, 'FearRatingInstTextEN': None, 'FearRatingInstTextCN': None},
      {'CondName': 'Stimuli/Raw_Pos.BMP', 'TrgCol': 0.6, 'FearRatingInstTextEN': None, 'FearRatingInstTextCN': None},
      {'CondName': 'Stimuli/Raw_Trig.BMP', 'TrgCol': 0.9, 'FearRatingInstTextEN': None, 'FearRatingInstTextCN': None}]
    Routine Rating
  LoopTerminator RatingCond
  LoopInitiator ExtInstText loopType="TrialHandler"
    conditionsFile = 0_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'PreCondInstTextEN': 'Please sit comfortably and focus on the screen at all times.', 'PreCondInstTextCN': '请放松地坐在椅子上，并始终注视于屏幕。', 'PreCondInstTextImage': 'Stimuli/Raw_black.BMP', 'CondInstTextEN': 'End of phase. Take a short break until you are instructed to continue.', 'CondInstTextCN': '本阶段结束。请短暂休息一下，等待开启下一阶段的指令。', 'CondInstTextImage': None, 'ExtInstTextEN': 'End of phase. Take a short break until you are instructed to continue.', 'ExtInstTextCN': '本阶段结束。请短暂休息一下，等待开启下一阶段的指令。', 'ExtInstTextImage': 'Stimuli/Raw_black.BMP', 'EndTextEN': 'The task is over, thank you for your participation!', 'E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,
      {'PreCondInstTextEN': 'You will see different faces appear on the screen. Please carefully observe them.', 'PreCondInstTextCN': '你会看到屏幕上出现不同的面孔。请仔细观察它们。', 'PreCondInstTextImage': 'Stimuli/Raw_black.BMP', 'CondInstTextEN': 'Again, faces will appear on the screen, of which some may feel unpleasant. Plase continue to look at the screen.', 'CondInstTextCN': '同样，你会看到屏幕上出现不同的面孔。请仔细观察它们。', 'CondInstTextImage': 'Stimuli/Raw_black.BMP', 'ExtInstTextEN': 'Before we continue, feel free to take a break of 5-10 minutes.', 'ExtInstTextCN': '在我们继续之前，请放松地休息5-10分钟.', 'ExtInstTextImage': 'Stimuli/Raw_black.BMP'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,
      {'PreCondInstTextEN': 'When you see the face below, please left-click the mouse as fast as you can', 'PreCondInstTextCN': '当你看到下面的面孔时，请以最快的速度按下鼠标左键。', 'PreCondInstTextImage': 'Stimuli/Raw_Trig.BMP', 'CondInstTextEN': 'When you see the face below, please left-click the mouse as fast as you can', 'CondInstTextCN': '当你看到下面的面孔时，请以最快的速度按下鼠标左键。', 'CondInstTextImage': 'Stimuli/Raw_Trig.BMP', 'ExtInstTextEN': 'Again, you will see different faces appear on the screen. Please carefully observe them.', 'ExtInstTextCN': '同样，你会看到屏幕上出现不同的面孔。请仔细观察它们。', 'ExtInstTextImage': 'Stimuli/Raw_Trig.BMP', 'EndTextEN':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,
      {'PreCondInstTextEN': 'Once you are ready, press CONTINUE', 'PreCondInstTextCN': "一旦你准备好了，请按下'Continue'.", 'PreCondInstTextImage': 'Stimuli/Raw_black.BMP', 'CondInstTextEN': 'Once you are ready, press CONTINUE', 'CondInstTextCN': "一旦你准备好了，请按下'Continue'.", 'CondInstTextImage': 'Stimuli/Raw_black.BMP', 'ExtInstTextEN': 'When you see the face below, please press SPACE as fast as you can', 'ExtInstTextCN': '当你看到下面的面孔时，请以最快的速度按下鼠标左键。', 'ExtInstTextImage': 'Stimuli/Raw_black.BMP', 'EndTextEN': None, 'EndTextCN': None}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
    Routine ExtInst
  LoopTerminator ExtInstText
  LoopInitiator Ext loopType="TrialHandler"
    conditionsFile = 3_Extinction.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neg.BMP', 'TrgCol': 0},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Neu.BMP', 'TrgCol': 0.4},
      {'ExtName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'ExtName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6},
      {'ExtName': 'Stimuli/Pos.BMP', 'TrgCol': 0.6}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
    Routine trialExt
    Routine ITI
  LoopTerminator Ext
  LoopInitiator RatingExt loopType="TrialHandler"
    conditionsFile = 4_Rating.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine Rating
  LoopTerminator RatingExt
  LoopInitiator EndText loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = 0_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine EndBlock
  LoopTerminator EndText
